---
API: 2.1
Citation: 'Logan, G. D., Cowan, W. B., & Davis, K. A. (1984). On the ability to inhibit
  simple and choice reaction time responses: a model and a method. *Journal of Experimental
  Psychology: Human Perception and Performance*, *10*(2), 276. <http://doi.org/10.1037/0096-1523.10.2.276>'
Description: Loosely based on Logan et al. (1984)
OpenSesame: 3.2.8b1
Platform: posix
Title: Stop-Signal Task
---
set width 1024
set uniform_coordinates yes
set title "Stop-Signal Task"
set subject_parity even
set subject_nr 0
set start practice
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/mencius/Desktop"
set disable_garbage_collection yes
set description "Loosely based on Logan (1984) Journal of Experimental Psychology: Human Perception and Performance"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background white

define notepad about_this_example
	__note__
	This is an example of a stop-signal task. In this experiment, participants respond to a leftward- or rightward-pointing arrow by pressing the left or right key, respectively. On some trials, a red square is presented—this is the stop signal. Participants should withold their response when the stop-signal is presented.
	This experiment is based on, but not identical to, the studies described by Gordon Logan in:
	- Logan, G. D., Cowan, W. B., & Davis, K. A. (1984). On the ability to inhibit simple and choice reaction time responses: a model and a method. *Journal of Experimental Psychology: Human Perception and Performance*, 10(2), 276. <http://doi.org/10.1037/0096-1523.10.2.276>
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad blank
	set duration 500
	set description "Displays stimuli"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set column_order "target;stop_after;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response l
	setcycle 0 stop_after ""
	setcycle 0 target pink
	setcycle 1 correct_response l
	setcycle 1 stop_after ""
	setcycle 1 target pink
	setcycle 2 correct_response l
	setcycle 2 stop_after ""
	setcycle 2 target pink
	setcycle 3 correct_response l
	setcycle 3 stop_after ""
	setcycle 3 target pink
	setcycle 4 correct_response l
	setcycle 4 stop_after ""
	setcycle 4 target pink
	setcycle 5 correct_response d
	setcycle 5 stop_after ""
	setcycle 5 target yellow
	setcycle 6 correct_response d
	setcycle 6 stop_after ""
	setcycle 6 target yellow
	setcycle 7 correct_response d
	setcycle 7 stop_after ""
	setcycle 7 target yellow
	setcycle 8 correct_response d
	setcycle 8 stop_after ""
	setcycle 8 target yellow
	setcycle 9 correct_response d
	setcycle 9 stop_after ""
	setcycle 9 target yellow
	run trial_sequence

define sketchpad correct_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sampler correct_feedback_sound
	set volume 1
	set stop_after 0
	set sample "correct.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad finished
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="The experiment is finished!<br /><br />Press any key to exit." x=0 y=0 z_index=0

define sketchpad fixdot
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=50 html=yes show_if=always text="+" x=0 y=-13 z_index=0

define sketchpad incorrect_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Mistake!" x=0 y=0 z_index=0

define sampler incorrect_feedback_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad instructions_1of7
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="When you begin, you will see<br /><br /><br /><br />              +<br /><br /><br /><br />in the middle of the screen." x=0 y=0 z_index=0
	draw image center=1 file="Instruction and stim slides 01.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_2of7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Then you will see either<br /><br /><br /><br />           or<br /><br /><br /><br />in the middle of the screen." x=0 y=0 z_index=0
	draw image center=1 file="Instruction and stim slides 02.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_3of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 03.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_4of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 04.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_5of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 05.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_6of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 06.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad instructions_7of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 07.gif" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response kb_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "d;l"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define sequence practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions_1of7 always
	run instructions_2of7 always
	run instructions_3of7 always
	run instructions_4of7 always
	run instructions_5of7 always
	run instructions_6of7 always
	run instructions_7of7 always
	run block_loop always
	run finished always

define sketchpad stop_signal
	set duration keypress
	set description "Displays stimuli"
	draw rect color=red fill=1 h=64 penwidth=1 show_if=always w=64 x=-32 y=-32 z_index=0

define coroutines stop_signal_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item kb_response
	set duration 2000
	set description "Run items simultaneously"
	run target end=0 runif=always start=0
	run kb_response end=2000 runif=always start=0

define sketchpad target
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Pinkstar.jpg" scale=1 show_if="[target] = pink" x=0 y=0 z_index=0
	draw image center=1 file="Yellowstar.jpg" scale=1 show_if="[target] = yellow" x=0 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixdot always
	run stop_signal_coroutines always
	run incorrect_feedback "[correct] = 0"
	run incorrect_feedback_sound "[correct] = 0"
	run correct_feedback "[correct] = 1"
	run correct_feedback_sound "[correct] = 1"
	run blank always
	run logger always

