---
API: 2.1
Citation: 'Logan, G. D., Cowan, W. B., & Davis, K. A. (1984). On the ability to inhibit
  simple and choice reaction time responses: a model and a method. *Journal of Experimental
  Psychology: Human Perception and Performance*, *10*(2), 276. <http://doi.org/10.1037/0096-1523.10.2.276>'
Description: Loosely based on Logan et al. (1984)
OpenSesame: 3.2.8b1
Platform: posix
Title: Stop-Signal Task
---
set width 1024
set uniform_coordinates yes
set title "Stop-Signal Task"
set subject_parity even
set subject_nr 0
set start StopSignalTaskExperiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 32
set font_italic no
set font_family Arial
set font_bold no
set experiment_path "/home/mencius/Desktop"
set disable_garbage_collection yes
set description "Loosely based on Logan (1984) Journal of Experimental Psychology: Human Perception and Performance"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background white

define loop EB2_block_loop_01
	set source table
	set repeat 4
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response none
	setcycle 0 stop_after SSD
	setcycle 0 target pink
	setcycle 1 correct_response none
	setcycle 1 stop_after SSD
	setcycle 1 target yellow
	setcycle 2 correct_response d
	setcycle 2 stop_after ""
	setcycle 2 target yellow
	setcycle 3 correct_response d
	setcycle 3 stop_after ""
	setcycle 3 target yellow
	setcycle 4 correct_response d
	setcycle 4 stop_after ""
	setcycle 4 target yellow
	setcycle 5 correct_response l
	setcycle 5 stop_after ""
	setcycle 5 target pink
	setcycle 6 correct_response l
	setcycle 6 stop_after ""
	setcycle 6 target pink
	setcycle 7 correct_response l
	setcycle 7 stop_after ""
	setcycle 7 target pink
	run trial_sequence_02

define loop PB2_block_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response none
	setcycle 0 stop_after SSD
	setcycle 0 target pink
	setcycle 1 correct_response none
	setcycle 1 stop_after SSD
	setcycle 1 target yellow
	setcycle 2 correct_response d
	setcycle 2 stop_after ""
	setcycle 2 target yellow
	setcycle 3 correct_response d
	setcycle 3 stop_after ""
	setcycle 3 target yellow
	setcycle 4 correct_response d
	setcycle 4 stop_after ""
	setcycle 4 target yellow
	setcycle 5 correct_response l
	setcycle 5 stop_after ""
	setcycle 5 target pink
	setcycle 6 correct_response l
	setcycle 6 stop_after ""
	setcycle 6 target pink
	setcycle 7 correct_response l
	setcycle 7 stop_after ""
	setcycle 7 target pink
	run trial_sequence_02_1

define inline_script SSD_adaptive
	set description "Executes Python code"
	___run__
	# Adjust SSD based on user error
	
	if var.correct == 1 and var.SSD <499:
		var.SSD += 50
	if var.correct == 0 and var.SSD >299:
		var.SSD -=50
	__end__
	set _prepare ""

define inline_script SSD_adaptive_1
	set description "Executes Python code"
	___run__
	# Adjust SSD based on user error
	
	if var.correct == 1 and var.SSD <499:
		var.SSD += 50
	if var.correct == 0 and var.SSD >299:
		var.SSD -=50
	__end__
	set _prepare ""

define sequence StopSignalTaskExperiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practice_block_01 always
	run practice_block_02 always
	run experiment_block_01 always
	run experiment_block_02 always
	run experiment_block_03 always
	run experiment_block_04 always
	run logger always
	run finished always

define sketchpad blank
	set duration 500
	set description "Displays stimuli"

define sketchpad blank_1
	set duration 500
	set description "Displays stimuli"

define sketchpad blank_1_1
	set duration 500
	set description "Displays stimuli"

define sketchpad break_message_01
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 11.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad break_message_02
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 11.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad break_message_03
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 11.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad correct_feeback
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sketchpad correct_feeback_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sampler correct_feeback_sound
	set volume 1
	set stop_after 0
	set sample "correct.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler correct_feeback_sound_1
	set volume 1
	set stop_after 0
	set sample "correct.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad correct_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sampler correct_feedback_sound
	set volume 1
	set stop_after 0
	set sample "correct.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad eb1_instructions
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 10.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sequence experiment_block_01
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run eb1_instructions always
	run EB2_block_loop_01 always
	run break_message_01 always

define sequence experiment_block_02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EB2_block_loop_01 always
	run break_message_02 always

define sequence experiment_block_03
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EB2_block_loop_01 always
	run break_message_03 always

define sequence experiment_block_04
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EB2_block_loop_01 always

define sketchpad finished
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 12.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad incorrect_feeback
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Mistake!" x=0 y=0 z_index=0

define sketchpad incorrect_feeback_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Mistake!" x=0 y=0 z_index=0

define sampler incorrect_feeback_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler incorrect_feeback_sound_1
	set volume 1
	set stop_after 0
	set sample "incorrect.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad incorrect_feedback
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Mistake!" x=0 y=0 z_index=0

define sampler incorrect_feedback_sound
	set volume 1
	set stop_after 0
	set sample "incorrect.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define inline_script install_SSD
	set description "Executes Python code"
	___run__
	#Set SSD
	
	var.SSD = 250
	__end__
	set _prepare ""

define keyboard_response kb_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "d;l"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop pb1_block_loop
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set column_order "target;stop_after;correct_response"
	set break_if_on_first yes
	set break_if never
	setcycle 0 correct_response l
	setcycle 0 target pink
	setcycle 1 correct_response l
	setcycle 1 target pink
	setcycle 2 correct_response l
	setcycle 2 target pink
	setcycle 3 correct_response l
	setcycle 3 target pink
	setcycle 4 correct_response l
	setcycle 4 target pink
	setcycle 5 correct_response d
	setcycle 5 target yellow
	setcycle 6 correct_response d
	setcycle 6 target yellow
	setcycle 7 correct_response d
	setcycle 7 target yellow
	setcycle 8 correct_response d
	setcycle 8 target yellow
	setcycle 9 correct_response d
	setcycle 9 target yellow
	run trial_sequence_01

define coroutines pb1_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item kb_response
	set duration 2000
	set description "Run items simultaneously"
	run target end=0 runif=always start=0
	run kb_response end=2000 runif=always start=0

define sketchpad pb1_fixdot
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=50 html=yes show_if=always text="+" x=0 y=-13 z_index=0

define sketchpad pb1_instructions_1of7
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="When you begin, you will see<br /><br /><br /><br />              +<br /><br /><br /><br />in the middle of the screen." x=0 y=0 z_index=0
	draw image center=1 file="Instruction and stim slides 01.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_2of7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=32 html=yes show_if=always text="Then you will see either<br /><br /><br /><br />           or<br /><br /><br /><br />in the middle of the screen." x=0 y=0 z_index=0
	draw image center=1 file="Instruction and stim slides 02.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_3of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 03.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_4of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 04.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_5of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 05.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_6of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 06.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb1_instructions_7of7
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 07.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb2_fixdot
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=50 html=yes show_if=always text="+" x=0 y=-12 z_index=0

define sketchpad pb2_fixdot_1
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=50 html=yes show_if=always text="+" x=0 y=-12 z_index=0

define sketchpad pb2_instructions_1of2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 08.gif" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pb2_instructions_2of2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Instruction and stim slides 09.gif" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response pb2_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "d;l"

define keyboard_response pb2_keyboard_response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "d;l"

define coroutines pb2_stop_signal_coroutines
	set function_name ""
	set flush_keyboard yes
	set end_after_item pb2_keyboard_response
	set duration 2000
	set description "Run items simultaneously"
	run stop_signal end=0 runif="[stop_after] != \"\"" start=0
	run pb2_target end=0 runif=always start=0
	run pb2_keyboard_response end=2000 runif=always start=0

define coroutines pb2_stop_signal_coroutines_1
	set function_name ""
	set flush_keyboard yes
	set end_after_item pb2_keyboard_response_1
	set duration 2000
	set description "Run items simultaneously"
	run stop_signal_1 end=0 runif="[stop_after] != \"\"" start=0
	run pb2_target_1 end=0 runif=always start=0
	run pb2_keyboard_response_1 end=2000 runif=always start=0

define sketchpad pb2_target
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Pinkstar.jpg" scale=1 show_if="[target] = pink" x=0 y=0 z_index=0
	draw image center=1 file="Yellowstar.jpg" scale=1 show_if="[target] = yellow" x=0 y=0 z_index=0

define sketchpad pb2_target_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Pinkstar.jpg" scale=1 show_if="[target] = pink" x=0 y=0 z_index=0
	draw image center=1 file="Yellowstar.jpg" scale=1 show_if="[target] = yellow" x=0 y=0 z_index=0

define sequence practice_block_01
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pb1_instructions_1of7 always
	run pb1_instructions_2of7 always
	run pb1_instructions_3of7 always
	run pb1_instructions_4of7 always
	run pb1_instructions_5of7 always
	run pb1_instructions_6of7 always
	run pb1_instructions_7of7 always
	run pb1_block_loop always

define sequence practice_block_02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pb2_instructions_1of2 always
	run pb2_instructions_2of2 always
	run install_SSD always
	run PB2_block_loop always

define sampler stop_signal
	set volume 1
	set stop_after 500
	set sample "testSound.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sampler stop_signal_1
	set volume 1
	set stop_after 500
	set sample "testSound.wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad target
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="Pinkstar.jpg" scale=1 show_if="[target] = pink" x=0 y=0 z_index=0
	draw image center=1 file="Yellowstar.jpg" scale=1 show_if="[target] = yellow" x=0 y=0 z_index=0

define sequence trial_sequence_01
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pb1_fixdot always
	run pb1_coroutines always
	run incorrect_feedback_sound "[correct] = 0"
	run correct_feedback "[correct] = 1"
	run correct_feedback_sound "[correct] = 1"
	run incorrect_feedback "[correct] = 0"
	run blank always

define sequence trial_sequence_02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pb2_fixdot always
	run pb2_stop_signal_coroutines always
	run correct_feeback_sound "[correct] = 1"
	run correct_feeback "[correct] = 1"
	run incorrect_feeback_sound "[correct] = 0"
	run incorrect_feeback "[correct] = 0"
	run blank_1 always
	run SSD_adaptive always

define sequence trial_sequence_02_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pb2_fixdot_1 always
	run pb2_stop_signal_coroutines_1 always
	run correct_feeback_sound_1 "[correct] = 1"
	run correct_feeback_1 "[correct] = 1"
	run incorrect_feeback_sound_1 "[correct] = 0"
	run incorrect_feeback_1 "[correct] = 0"
	run blank_1_1 always
	run SSD_adaptive_1 always

